PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'taskVer': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = sAdaptAlpha2
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Routines
  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent cursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        ang = None
        rtd = None

        #Set up rotations and main tasks
        # NOTE: JS isn't automatically converted with global keyword
        def setAbruptMainTask():
            print('Abrupt Main Task')
            ang = rotation[0] * 30
            rtd = ang*(pi/180)

        def setRampedMainTask():
            print('Ramped Main Task')
            if (trials2.thisN <= 47):
                ang = rotation[0] * (trials2.thisN+1)*0.625
            else:
                ang = rotation[0] * 30
            rtd = ang*(pi/180)

        def setStepMainTask():
            print('Step Main Task')
            if (trials2.thisN <= 23):
                ang = rotation[0] * 7.5
            elif (trials2.thisN > 23 and trials2.thisN <= 47):
                ang = rotation[0] * 15
            elif (trials2.thisN > 47 and trials2.thisN <= 71):
                ang = rotation[0] * 22.5
            else:
                ang = rotation[0] * 30
            rtd = ang*(pi/180)

        #Set up inverses
        # Might be possible combine these with the Main task functions
        def setAbruptInverseTask():
            print('Abrupt Inverse Task')
            ang = rotation[1] * 30
            rtd = ang*(pi/180)

        def setRampedInverseTask():
            print('Ramped Inverse Task')
            if (trials2.thisN <= 47):
                ang = rotation[1] * (trials2.thisN+1)*0.625
            else:
                ang = rotation[1] * 30
            rtd = ang*(pi/180)

        def setStepInverseTask():
            print('Step Inverse Task')
            if (trials2.thisN <= 23):
                ang = rotation[1] * 7.5
            elif (trials2.thisN > 23 and trials2.thisN <= 47):
                ang = rotation[1] * 15
            elif (trials2.thisN > 47 and trials2.thisN <= 71):
                ang = rotation[1] * 22.5
            else:
                ang = rotation[1] * 30
            rtd = ang*(pi/180)
      Begin Routine:
        win.mouseVisible = False

        targetangle = targetAngles[loopCount][trials.thisN % 2] # targetAngles defined in instruction1
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        screen_width = win.size[0]/win.size[1]
        screen_height = win.size[1]/win.size[1]

        trimmed_width = (2/3) * screen_width
        trimmed_height = (2/3) * screen_height

        if trimmed_height*2 < trimmed_width:
            trimmed_width = trimmed_height*2
        else:
            trimmed_height = trimmed_width/2

        homePos = [0, -0.35 * trimmed_height]

        targetOpacity = 0
        homeOpacity = 0
        #'buffer' circle set up
        bufferOpacity = 0
        bufferRadius = (sqrt(trial4Cursor.pos[0]**2 + trial4Cursor.pos[1]**2))
        #allows cursor opacity changing
        cursorOpacity = 1
        cursorPosX = trialCursor.pos[0]
        CursorPosY = trialCursor.pos[1]

        homeStart = False
        reachOut = False

        trialStep = 1
        steps = []

        if counter == 1:
            print("Align task")
            #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
            trialNum.text = str(trials.thisN+1)+' / 12'

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

        if counter == 2:
            print('Error Clamped Task')
            #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
            trialNum.text = str(trials.thisN+1)+' / 12'

            cursorOpacity = 0

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

            theta = (targetangle / 180) * pi

        if counter == 3 or counter == 7:
            print("Align task")
            #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
            trialNum.text = str(trials.thisN+1)+' / 32'

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

        if counter == 4 or counter == 8:
            #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
            trialNum.text = str(trials.thisN+1)+' / 96'

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

            task = order[loopCount] # loopCount taken from the selectionVariables.xlsx

            if (task == 0):
                setAbruptMainTask()
            elif (task == 1):
                setRampedMainTask()
            elif (task == 2):
                setStepMainTask()
            else:
                setAbruptMainTask() # Contingency condition don't know if this is needed

            trialText.text = str(ang)

        if counter == 5 or counter == 9:
            #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
            trialNum.text = str(trials.thisN+1)+' / 8'

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

            task = order[loopCount]

            if (task == 0):
                setAbruptInverseTask()
            elif (task == 1):
                setRampedInverseTask()
            elif (task == 2):
                setStepInverseTask()
            else:
                setAbruptInverseTask() # Contingency condition don't know if this is needed

            trialText.text = str(ang)

        if counter == 6 or counter == 10:
            #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
            trialNum.text = str(trials.thisN+1)+' / 24'

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

            cursorOpacity = 0

            theta = (targetangle / 180) * pi

            print('Error Clamped Task')
      Each Frame:
        CursorTargetDistance = sqrt((trialCursor.pos[0]-trialTarget.pos[0])**2 + (trialCursor.pos[1]-trialTarget.pos[1])**2)
        CursorHomeDistance = sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2)

        steps.append(trialStep)
        # steps.push(step)

        if counter == 1:
            cursorPosX = trialCursor.pos[0]
            CursorPosY = trialCursor.pos[1]

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)

        if counter == 2:
            cursorPosX = sqrt((trial4Mouse.getPos()[0]**2)+(trial4Mouse.getPos()[1]**2))*(cos(theta))
            CursorPosY = sqrt((trial4Mouse.getPos()[0]**2)+(trial4Mouse.getPos()[1]**2))*(sin(theta))

            if step == 2:
                theta = (targetangle / 180) * pi
                rx = dist * cos(theta)
                ry = dist * sin(theta)
                radius = 1
            else:
                if dist > 1:
                    rx = homex
                    ry = homey
                    radius = dist
                    diameter = 2*dist
                else:
                    rx = xmouse
                    ry = ymouse
                    radius = 1

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 1
                bufferOpacity = 0
                cursorOpacity = 1
                if (CursorHomeDistance < .075):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                trialStep = 2
                bufferOpacity = 0
                cursorOpacity = 1
                if (CursorTargetDistance < .025):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 3
                #COntrols the 'buffer'
                bufferOpacity = 1
                bufferRadius = (sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2))
                #controls the cursor
                cursorOpacity = 0
                if (CursorHomeDistance < .2):
                    cursorOpacity = 1
                if (CursorHomeDistance < .075):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)

        if counter == 3 or counter == 7:
            cursorPosX = trialCursor.pos[0]
            CursorPosY = trialCursor.pos[1]

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)

        if counter == 4 or counter == 8:
            cursorPosX = (trialMouse.getPos()[0]*cos(rtd))-(trialMouse.getPos()[1]*sin(rtd))
            CursorPosY = (trialMouse.getPos()[0]*sin(rtd))+(trialMouse.getPos()[1]*cos(rtd))

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)

        if counter == 5 or counter == 9:
            cursorPosX = (trialMouse.getPos()[0]*cos(rtd))-(trialMouse.getPos()[1]*sin(rtd))
            CursorPosY = (trialMouse.getPos()[0]*sin(rtd))+(trialMouse.getPos()[1]*cos(rtd))

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .025):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                trialStep = 2
                if (CursorTargetDistance < .025):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .025):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)

        if counter == 6 or counter == 10:
            CursorTargetDistance = sqrt((trialCursor.pos[0]-trialTarget.pos[0])**2 + (trialCursor.pos[1]-trialTarget.pos[1])**2)
            CursorHomeDistance = sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2)
            cursorPosX = sqrt((trialMouse.getPos()[0]**2)+(trialMouse.getPos()[1]**2))*(cos(theta))
            CursorPosY = sqrt((trialMouse.getPos()[0]**2)+(trialMouse.getPos()[1]**2))*(sin(theta))

            if step == 2:
                theta = (targetangle / 180) * pi
                rx = dist * cos(theta)
                ry = dist * sin(theta)
                radius = 1
            else:
                if dist > 1:
                    rx = homex
                    ry = homey
                    radius = dist
                    diameter = 2*dist
                else:
                    rx = xmouse
                    ry = ymouse
                    radius = 1

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 1
                bufferOpacity = 0
                cursorOpacity = 1
                if (CursorHomeDistance < .075):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                trial4Step = 2
                bufferOpacity = 0
                cursorOpacity = 1
                if (CursorTargetDistance < .025):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                trial4Step = 3
                #COntrols the 'buffer'
                bufferOpacity = 1
                bufferRadius = (sqrt(trial4Cursor.pos[0]**2 + trial4Cursor.pos[1]**2))
                #controls the cursor
                cursorOpacity = 0
                if (CursorHomeDistance < .2):
                    cursorOpacity = 1
                if (CursorHomeDistance < .075):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trialTarget
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialHome
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      pos [set every frame] = homePos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      opacity [set every frame] = cursorOpacity
      pos [set every frame] = [mousePosX, mousePosY]
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      startExpValue = 0
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    TextComponent trialNum
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 0
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    KeyboardComponent trialSkip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine s
    CodeComponent JSCodeFix
      Code Type = Auto->JS
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    CodeComponent codeCounterStart
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
  Routine i
    TextComponent instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Move mouse. Space countinue.
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    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if not(counter == 3 or counter == 7):
            continue

        if counter == 3:
            instr.text = "Move mouse. Space countinue."

        if counter == 7:
            instr.text = "Move mouse. Space countinue."
  Routine e
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Space exit
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine s2
    CodeComponent codeCounterAdd
      Code Type = Auto->JS
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      Begin Routine:
        counter = counter + 1
    CodeComponent selectCode
      Code Type = Auto->JS
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      Begin Experiment:
        # Do error checking for correct values of taskVer
        try:
            taskVer = int(expInfo['taskVer']) # Check to see if this is safe
        except ValueError:
            taskVer = 0

        # Variables to keep track of the order, rotation and target choices
        orderChoice = taskVer % 6
        rotationChoice = np.floor( taskVer / 12 ) % 2
        targetChoice = np.floor( taskVer / 6) % 2

        # Order
        order = [0,1] # Default choice
        if (orderChoice == 0):
            order = [0,1]
        elif (orderChoice == 1):
            order = [0,2]
        elif (orderChoice == 2):
            order = [1,0]
        elif (orderChoice == 3):
            order = [1,2]
        elif (orderChoice == 4):
            order = [2,0]
        elif (orderChoice == 5):
            order = [2,1]


        # Rotation of the mouse angle
        rotation = [1,-1] # Default choice
        if (rotationChoice == 0):
            rotation = [1,-1]
        elif (rotationChoice == 1):
            rotation = [-1,1]

        # Choose set of angles for Main and Inverted task, respectively
        targetAngles = [[40,50],[130,140]] # Default choice
        if (targetChoice == 0):
            targetAngles = [[40,50],[130,140]]
        elif (targetChoice == 1):
            targetAngles = [[130,140],[40,50]]
      Begin Routine:
        loopCount = int(loopCount) # convert the loopCount in selectionLoop to an int
Flow
  Routine s
  LoopInitiator selectLoop loopType="TrialHandler"
    conditionsFile = selectionVariables.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('loopCount', -1), ('condSelect', 'trials1PreCond.xlsx')]),
      OrderedDict([('loopCount', -1), ('condSelect', 'trials2PreCond.xlsx')]),
      OrderedDict([('loopCount', 0), ('condSelect', 'trials1Cond.xlsx')]),
      OrderedDict([('loopCount', 0), ('condSelect', 'trials2Cond.xlsx')]),
      OrderedDict([('loopCount', 0), ('condSelect', 'trials3Cond.xlsx')]),
      OrderedDict([('loopCount', 0), ('condSelect', 'trials4Cond.xlsx')]),
      OrderedDict([('loopCount', 1), ('condSelect', 'trials1Cond.xlsx')]),
      OrderedDict([('loopCount', 1), ('condSelect', 'trials2Cond.xlsx')]),
      OrderedDict([('loopCount', 1), ('condSelect', 'trials3Cond.xlsx')]),
      OrderedDict([('loopCount', 1), ('condSelect', 'trials4Cond.xlsx')])]
    Routine s2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = selectionRows.xlsx
      loopType = sequential
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      conditions:
        [OrderedDict([('repRows', 12)]),
        OrderedDict([('repRows', 12)]),
        OrderedDict([('repRows', 32)]),
        OrderedDict([('repRows', 96)]),
        OrderedDict([('repRows', 8)]),
        OrderedDict([('repRows', 24)]),
        OrderedDict([('repRows', 32)]),
        OrderedDict([('repRows', 96)]),
        OrderedDict([('repRows', 8)]),
        OrderedDict([('repRows', 24)])]
      Routine i
      Routine trial
    LoopTerminator trials
  LoopTerminator selectLoop
  Routine e
